CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:images
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:images
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigRed
    Name the primary objects to be identified:cell_nucleus
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
TrackObjects:[module_num:7|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
    Choose a tracking method:Overlap
    Select the objects to track:cell_nucleus
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    Maximum pixel distance to consider matches:10
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:cell_nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Sources/CellProfiler_GaussianProxy_analyses/TMP_TEST_analyses
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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